'CR6 Series Datalogger>= 
' GreenFLAMe version 1.6

'=========================== VARIABLES ==============================================

'### LGR Greenhouse Gas Analyzer (GGA) Variables ###
Public GGA_String As String * 522 = {"NO GGA"}
Dim GGA_SplitString(20) As String * 16
Dim GGA_DateTime(2) As String * 16
Dim GGA_TimeStamp(3) As String * 16
'GGA Variables
Dim gga_time As String * 16
Dim gga_second As Float
Public CH4_Wet As Float
Public CH4_Dry As Float
Public H2O As Float
Public CO2_Wet As Float
Public CO2_Dry As Float
Dim gga_last_sec As Float
Dim gga_sec_delta As Float = {0}

'### Barometric Pressure
Public barom_mVolt As Float
Public barom_mmHg As Float
Units barom_mmHg=mmHg

'### Nitrate (SUNA) Variables ###
'Serial In Declarations
'Declare a string variables large enough to hold the input string.
Public SUNA_String As String * 1800 = {"No Suna"}
Dim SUNA_SplitString(287) As String * 16
' Data has 1 alphanumeric header, 256 x Int arry, 7 x Ints, 22 x Floats
' plus one emulator sample number: "emu_sample"
'Nitrate Variables
Dim header As String * 16
Dim year_jday As Long
Dim hour As Float
Public NO3_uM As Float
Public NO3_mgL As Float
Public abs254 As Float
Public abs350 As Float
Dim br_trace As Float
Dim spec_avg As Long
Dim dark_val As Long
Dim int_tf As Long
Dim spec_chan(256) As Long
Public temp_int As Float
Public temp_spect As Float
Public temp_lamp As Float
Dim lamp_ontime As Long
Dim rel_hum As Float
Dim volt_main As Float
Dim volt_lamp As Float
Dim volt_int As Float
Dim amps_main As Float
Dim fit_aux1 As Float
Dim fit_aux2 As Float
Dim fit_base1 As Float
Dim fit_base2 As Float
Dim fit_rmse As Float
Dim suna_last_time As Float
Dim suna_time_delta As Float = {0}

'### EXO Variables ### 
Public EXO_String As String * 400 = {"NO EXO"}
Dim EXO_SplitString(20) As String * 16
'EXO Variables
Dim sDate As Long '51
Dim sTime As Long '54
Dim exo_depth As Float
Public temp As Float '1
Public specCond As Float '7
Public pH As Float '18
Dim pH_mV As Float 
Public pressure As Float '20
Dim chlor_ugL '193
Public chlor_RFU As Float '194
Public ODO_percent As Float '211
Public ODO_mgL As Float '212
Public BGApc_RFU As Float '216
Dim BGApc_ugL As Float '225
Public turb_FNU As Float '223
Public fDOM_RFU As Float '227
Public fDOM_QSU As Float '228
Dim tds As Float
Public extPower As Float '230
Public wiperPos As Float
Dim exo_last_time As Long
Dim exo_time_delta As Long = {0}

'### Position GPS (puck)  Variables ###
Dim GPS_Data(15) 'data array from GPS function
Dim GPS_SplitString(16) As String * 16 'Assuming up to 16 fields
Public GPRMC As String * 128 = {"No Puck GPS"} 'One of the GPS messages being transmitted
Public time_sync As String * 4 = {"No"} 'Is it time syncing? Yes or no
'GPRMC Variables
Dim rmc_header As String * 8
Public time_utc As Long
Public data_status As String * 4 = {"V"} 'A=valid; V=invalid
Public latitude As Float
Public longitude As Float
Public speed As Float
Public course As Float
Public date_utc As Long
' Dim rmc_checksum As String * 16
Dim gps_last_time As Long = {0}
Dim gps_time_delta As Long = {0}

'### EchoMap Sonar Variables ###
Dim EchoMap_Data As String * 128
Dim EchoMap_SplitString(16) As String * 16 'Assuming up to 16 fields
Public SDDBT As String * 128 = {"No Depth Data"}
Dim GPGLL As String * 128 'Position data
Dim GPGGA As String * 128 'GPS signal quality
Dim SDMTW As String * 128 'Water temp
'SDDBT Variables
Dim dbt_header As String * 8
Public depth As Float  'depth in meters
Dim units_depth As String * 1 'M
'GPGLL Variables
Dim gll_time_utc As Long 'GPGLL time(utc)
Dim gll_status As String * 1 'V or A
Public latitude2 As Float
Dim hemi_lat As String * 1  'N or S
Public longitude2 As Float
Dim hemi_long As String * 1 'E ir W
'GPGGA Variables
Public num_satellites As Long = {0}
Public gps_fix_code As Long = {0}
Public fix_quality As String * 16 = {"Invalid"}
'SDMTW Variables
Public water_temp As Float 'water temp

'### Turner C6 - code from USGS Colin ###
Public C6_RawString As String * 100
Dim C6P(8)
Public C6_TimeStr As String * 20
Public C6_last_str As String * 20 = ("0")
Dim SpaceAT
Dim Turb_C6P As Float
Dim  CDOM_C6P As Float
Dim  CHL_a_C6P As Float
Dim  Brightners As Float
Dim  Fluorescein As Float
Dim  Ref_Fuel	As Float
Dim  C6_Depth As Float
Dim  Temp_C6P As Float

'### FluoroProbe Variables ###
Public FP_Str555 As String * 150
Public FP_Str553 As String * 80
Public FP_555Len
Public FP_553Len
Public FP_555_SplitStr(22) As String * 16
Public FP_553_SplitStr(15) As String * 16
Public FP_last_datetime As Float = {0.0}
Public FP_DateTime As Float
Dim FP_Pressure As Float
Dim FP_MedTemp As Float
Dim FP_Status As Float
Dim FP_Depth As Float
Dim FP_Trans As Float
Dim FP_GreenAlgae As Float
Dim FP_BlueGreen As Float
Dim FP_Diatoms As Float
Dim FP_Cryptophyta As Float
Dim FP_AlgaeClass5 As Float
Dim FP_AlgaeClass6 As Float
Dim FP_AlgaeClass7 As Float
Dim FP_YellowSubs As Float


'### Setup/Generic/Status Variables ###
' Public i_voltage As Float  'Voltage from the current sensor
' Public current_total As Float  'System current draw
Public temp_logger As Float    'CR6 internal temp
Dim NBytesReturned
Dim I ' looping variable
Dim scan_count As Long = {0}
Dim sec_count_down As Long = {0}
' Dim gps_time_str As String * 6
' Dim gps_date_str As String * 6
' Dim clock_value As String * 19 'yyyy-mm-dd HH:MM:SS
' Dim clock_array(6) As Long
' Alias clock_array(6) = gps_sec
Public suna_message As String * 32
' Public exo_message As String * 32
Const LOCAL_TIME_OFFSET As Long = 0
Dim system_status As String * 32
Public gps_status As Boolean = 0
Public exo_status As Boolean = 0
Public gga_status As Boolean = 0
Public suna_status As Boolean = 0
Dim lat_degrees As Long 'Used by two GPS's
Dim lat_minutes As Float
Dim long_degrees As Long
Dim long_minutes As Float

'============================== FUNCTION DEFS ====================================

Function GetGPS As String * 128
  GPS(GPS_Data,COMU1,LOCAL_TIME_OFFSET*3600,20,GPRMC)  
  lat_degrees = GPS_Data(1)
  lat_minutes = GPS_Data(2)
  long_degrees = GPS_Data(3)
  long_minutes = GPS_Data(4)  
  If (GPS_Data(13) = 10) Then time_sync = "Yes" Else time_sync = "No"  
  Return(GPRMC)
EndFunction

'============================== DATA TABLE SETUP ====================================

'### GGA ###
'DataTable(GGA,TRUE,-1)
DataTable(GGA,gga_sec_delta<>0,-1)
  TableFile("CRD:GGA",8,-1,0,1,Day,0,0)
  Sample(1,gga_time,String)
  Sample(1,CH4_Wet,IEEE4)
  Sample(1,CH4_Dry,IEEE4)
  Sample(1,CO2_Wet,IEEE4)
  Sample(1,CO2_Dry,IEEE4)
  Sample(1,H2O,IEEE4)
  Sample(1,barom_mVolt,IEEE4)	
  Sample(1,barom_mmHg,IEEE4)	
EndTable  

'### Nitrate ###
DataTable(SUNA,suna_time_delta<>0,-1) 'trigger when time changes
  'DataInterval(0,1,Sec,0)
  TableFile("CRD:SUNA",8,-1,0,1,Day,0,0)
  Sample(1,year_jday,Long)
  Sample(1,hour,FP2)
  Sample(1,NO3_uM,FP2)
  Sample(1,NO3_mgL,FP2)
  Sample(1,abs254,FP2)
  Sample(1,abs350,FP2)
  Sample(1,br_trace,FP2)
  Sample(1,spec_avg,Long)
  Sample(1,dark_val,Long)
  Sample(1,int_tf,Long)
  Sample(256,spec_chan,Long)
  Sample(1,temp_int,FP2)
  Sample(1,temp_spect,FP2)
  Sample(1,temp_lamp,FP2)
  Sample(1,lamp_ontime,Long)
  Sample(1,rel_hum,FP2)
  Sample(1,volt_main,FP2)
  Sample(1,volt_lamp,FP2)
  Sample(1,volt_int,FP2)
  Sample(1,amps_main,FP2)
  Sample(1,fit_aux1,FP2)
  Sample(1,fit_aux2,FP2)
  Sample(1,fit_base1,FP2)
  Sample(1,fit_base2,FP2)
  Sample(1,fit_rmse,FP2)
EndTable

'### EXO ###
'DataTable(EXO,TRUE,-1)
DataTable(EXO,exo_time_delta<>0,-1)
  TableFile("CRD:EXO",8,-1,0,1,Day,0,0)
  Sample(1,sDate,Long)
  Sample(1,sTime,Long)
  Sample(1,exo_depth,FP2)
  Sample(1,pressure,FP2)
  Sample(1,temp,FP2)
  Sample(1,specCond,FP2)
  Sample(1,pH,FP2)
  Sample(1,pH_mV,FP2)
  Sample(1,ODO_percent,FP2)
  Sample(1,ODO_mgL,FP2)
  Sample(1,chlor_ugL,FP2)
  Sample(1,chlor_RFU,FP2)
  Sample(1,BGApc_ugL,FP2)
  Sample(1,BGApc_RFU,FP2)
  Sample(1,turb_FNU,FP2)
  Sample(1,tds,FP2)
  Sample(1,fDOM_RFU,FP2)
  Sample(1,fDOM_QSU,FP2)
  Sample(1,extPower,FP2)
  Sample(1,wiperPos,FP2)
EndTable

'### Puck GPS ###
DataTable(GPS,gps_time_delta<>0,-1)
  TableFile("CRD:Puck",8,-1,0,1,Day,0,0)
  Sample(1,rmc_header,String)
  Sample(1,data_status,String)
  Sample(1,time_utc,Long)
  Sample(1,date_utc,Long)
  Sample(1,latitude,IEEE4)
  Sample(1,longitude,IEEE4)
  Sample(1,speed,FP2)
  Sample(1,course,FP2)
  Sample(1,NBytesReturned,Long)
EndTable

'### EchoMap ###
DataTable(EchoMap,TRUE,-1)
  TableFile("CRD:EchoMap",8,-1,0,1,Day,0,0)
  Sample(1,depth,FP2)
	Sample(1,water_temp,FP2)
  Sample(1,latitude2,IEEE4)
	Sample(1,longitude2,IEEE4)	
	Sample(1,gps_fix_code,UINT2)
EndTable

'### Turner C6 ###
'DataTable (C6,1,-1)
DataTable (C6,C6_last_str<>C6_TimeStr,-1) 
  Sample (1,C6_TimeStr,String)
  Sample (1,Turb_C6P,IEEE4)
  Sample (1,CDOM_C6P,IEEE4)
  Sample (1,CHL_a_C6P,IEEE4)
  Sample (1,Brightners,IEEE4)
  Sample (1,Fluorescein,IEEE4)
  Sample (1,Ref_Fuel,IEEE4)
  Sample (1,C6_Depth,IEEE4)
  Sample (1,Temp_C6P,IEEE4)
EndTable

DataTable (FluoroProbe,1,-1) 
'DataTable (FluoroProbe,fp_last_datetime<>FP_DateTime,-1) 
  Sample (1,FP_DateTime,IEEE4)
  Sample (1,FP_Pressure,IEEE4)
  Sample (1,FP_MedTemp,IEEE4)
  Sample (1,FP_Status,UINT2)
  Sample (1,FP_Depth,IEEE4)
  Sample (1,FP_Trans,IEEE4)
  Sample (1,FP_GreenAlgae,IEEE4)
  Sample (1,FP_BlueGreen,IEEE4)
  Sample (1,FP_Diatoms,IEEE4)
  Sample (1,FP_Cryptophyta,IEEE4)
  Sample (1,FP_AlgaeClass5,IEEE4)
  Sample (1,FP_AlgaeClass6,IEEE4)
  Sample (1,FP_AlgaeClass7,IEEE4)
  Sample (1,FP_YellowSubs,IEEE4)
EndTable


'============================== MAIN PROGRAM ========================================
BeginProg

  '   ----------- Open The Serial Ports ---------------------------
  'U1/U2 for GPS as RS-232, 5V RS-232 -- Don't need to open that port 
   SerialOpen(32,38400,0,0,1024) ' EXO - Q1 (32) on multiplexer
   SerialOpen(33,57600,0,0,2048) 'Q2 (33) Nitrate (SUNA) on multiplexer
   SerialOpen(34,19200,48,0,240) 'Q3 (34) FluoroProbe on multiplexer
   SerialOpen(35,9600,0,0,200) ' Q4 (35) Turner C6 on muliplexer
   SerialOpen(ComME,9600,0,0,1200) ' LGR on SC105
   SerialOpen(ComU3,4800,0,0,1000,1) 'U4 for EchoMap  

   '  ----- Get the initial GPS Data -----
    SetStatus("Baudrate(COMU1)",19200)
    GPRMC = GetGPS()  '

'  '' Not currently using this initialization function
'  Scan(5,Sec, 3, 0)
'
'    scan_count = scan_count + 1
'    system_status = "Waiting for sensor startup"
'    GPRMC = GetGPS()
'    SplitStr(GPS_SplitString(),GPRMC,",",16,5)
'    data_status=GPS_SplitString(3)
'
' 
'    If (data_status = "A") Then ExitScan
'  NextScan
  
'     *********** Delay 75 seconds For Data Logger time sync  *****************
  sec_count_down = 75
  Scan(1,Sec, 3, 0)
    Sprintf(system_status,"Delay: %02d seconds",sec_count_down)
    sec_count_down = sec_count_down - 1
    If (sec_count_down <= 0) Then ExitScan
  NextScan

  scan_count = 0

  '  ******************* Run the Main Scan  *********************************
  Scan(1,Sec, 3, 0)
    system_status = "Main Sensor Scan"

    '   ----------- Get The Sensor Serial Messages -------------------
    'Get the Position GPS Data
     'SetStatus("Baudrate(COMU1)",19200)
     GPRMC = GetGPS()
     'SerialOut(34,"140"+CHR(13),"",0,0)
     
     ' Get the EXO Data -- looking for data delimiter '#' (35)
     SerialInRecord(32,EXO_String,35,0,&H0D0A,NBytesReturned,00)
     ' Get the Nitrate Data -- looking for "LF" in the input string
     SerialInRecord(33,SUNA_String,&h4c46,0,&h0D0A,NBytesReturned,00)
     'Get the GGA Data - format differs because GGA differ (?)
     SerialInRecord(ComME,GGA_String,47,0,&H0D0A,NBytesReturned,00)  'LGR
     ' Get the Turner C6 data
     SerialInRecord (35,C6_RawString,10,0,13,NBytesReturned,01)
    ' Get the FluoroProbe data
    Erase(FP_Str555)
    Erase(FP_Str553)
    SerialInRecord(34,FP_Str555,0,0,&H0D0A,FP_555Len,10)
    SerialInRecord(34,FP_Str553,0,0,&H0D0A,FP_553Len,10)
    SerialFlush(34)
	
    'Parse the EchoMap strings
    'Gathering four messages so loop SerialInRecord four times.
    For I=1 To 4
      SerialInRecord(ComU3,EchoMap_Data,36,0,&h0D0A,NBytesReturned,11)
      If InStr (1,EchoMap_Data,"SDDBT",2) Then
        SDDBT = EchoMap_Data
      ElseIf InStr (1,EchoMap_Data,"GPGLL",2) Then
        GPGLL = EchoMap_Data
      ElseIf InStr (1,EchoMap_Data,"GPGGA",2) Then
        GPGGA = EchoMap_Data
      ElseIf InStr (1,EchoMap_Data,"SDMTW",2) Then
        SDMTW = EchoMap_Data
      EndIf
    Next I

    '   ----------- Process Strings Into Fields -------------------------
    'Parse the GPS Position strings
    SplitStr(GPS_SplitString(),GPRMC,",",16,5)
    rmc_header=GPS_SplitString(1)
    time_utc=GPS_SplitString(2)
    data_status=GPS_SplitString(3)
    speed=GPS_SplitString(8)
    course=GPS_SplitString(9)
    date_utc=GPS_SplitString(10)
    gps_time_delta=time_utc-gps_last_time
    gps_last_time=time_utc
    ' We're using the lat/long from the GPS function so it can be converted
    ' to decimal degrees
     latitude=Round(lat_degrees +(lat_minutes/60),8)
     longitude=Round(long_degrees+(long_minutes/60),8)
    CallTable(GPS)

   'Parse the EXO string
    SplitStr(EXO_SplitString(),EXO_String,",",20,5)
    sDate=EXO_SplitString(1)
    sTime=EXO_SplitString(2)
    exo_depth=EXO_SplitString(3)
    pressure=EXO_SplitString(4)
    temp=EXO_SplitString(5)
    specCond=EXO_SplitString(6)
    pH=EXO_SplitString(7)
    pH_mV=EXO_SplitString(8)
    ODO_percent=EXO_SplitString(9)
    ODO_mgL=EXO_SplitString(10)
    chlor_ugL=EXO_SplitString(11)
    chlor_RFU=EXO_SplitString(12)
    BGApc_ugL=EXO_SplitString(13)
    BGApc_RFU=EXO_SplitString(14)
    turb_FNU=EXO_SplitString(15)
    tds=EXO_SplitString(16)
    fDOM_RFU=EXO_SplitString(17)
    fDOM_QSU=EXO_SplitString(18)
    extPower=EXO_SplitString(19)
    wiperPos=EXO_SplitString(20)
    exo_time_delta = sTime - exo_last_time
    exo_last_time = sTime
    CallTable(EXO)
   
    'Parse the SUNA string
    SplitStr(SUNA_SplitString(),SUNA_String,",",287,5)
    header=SUNA_SplitString(1)
    year_jday=SUNA_SplitString(2)
    hour =SUNA_SplitString(3)
    NO3_uM =SUNA_SplitString(4)
    NO3_mgL=SUNA_SplitString(5)
    abs254=SUNA_SplitString(6)
    abs350=SUNA_SplitString(7)
    br_trace=SUNA_SplitString(8)
    spec_avg=SUNA_SplitString(9)
    dark_val=SUNA_SplitString(10)
    int_tf=SUNA_SplitString(11)
    For I=1 To 256
      spec_chan(I)=SUNA_SplitString(11+I)
    Next I
    temp_int=SUNA_SplitString(268)
    temp_spect=SUNA_SplitString(269)
    temp_lamp=SUNA_SplitString(270)
    lamp_ontime=SUNA_SplitString(271)
    rel_hum=SUNA_SplitString(272)
    volt_main=SUNA_SplitString(273)
    volt_lamp=SUNA_SplitString(274)
    volt_int=SUNA_SplitString(275)
    amps_main=SUNA_SplitString(276)
    fit_aux1=SUNA_SplitString(277)
    fit_aux2=SUNA_SplitString(278)
    fit_base1=SUNA_SplitString(279)
    fit_base2=SUNA_SplitString(280)
    fit_rmse=SUNA_SplitString(281)
    suna_time_delta = hour - suna_last_time
    suna_last_time = hour
    CallTable(SUNA)
    
    'Parse the GGA string
     SplitStr(GGA_SplitString(),GGA_String,",",20,5)
     SplitStr(GGA_DateTime(),GGA_SplitString(1)," ",2,5)
     gga_time=GGA_DateTime(2)
     SplitStr(GGA_TimeStamp(),gga_time,":",3,5) 
     gga_second=GGA_TimeStamp(3)
     CH4_Wet=GGA_SplitString(2)
     CH4_Dry=GGA_SplitString(8)
     H2O=GGA_SplitString(4)
     CO2_Wet=GGA_SplitString(6)
     CO2_Dry=GGA_SplitString(10)
     gga_sec_delta = gga_second - gga_last_sec
     gga_last_sec = gga_second     
     CallTable(GGA)
     
    'Barometric Pressure PTB110
     VoltSe(barom_mVolt,1,mV5000,U5,1,0,_60Hz,1,0)
     barom_mmHg = 0.75006*((barom_mVolt)*0.24 + 500)
   
    'Parse EchoMap
    SplitStr(EchoMap_SplitString(),GPGLL,",",10,5)
    lat_minutes = EchoMap_SplitString(2)
    hemi_lat = EchoMap_SplitString(3)
    long_minutes = EchoMap_SplitString(4)
    hemi_long = EchoMap_SplitString(5)
    lat_degrees = Floor(lat_minutes/100)
    lat_minutes = lat_minutes - (lat_degrees*100)
    latitude2 = Round(lat_degrees +(lat_minutes/60),8)
    'latitude2 = lat_degrees +(lat_minutes/60)
    If (hemi_lat = "S") Then latitude2 = -1*latitude2
    long_degrees =  Floor(long_minutes/100)
    long_minutes = long_minutes - (long_degrees*100)
    longitude2=Round(long_degrees+(long_minutes/60),8)
    If (hemi_long = "W") Then longitude2 = -1*longitude2

    ' Parse up the Turner C6 String
    SpaceAT=InStr (1,C6_RawString,"   ",2)
    C6_TimeStr= Mid (C6_RawString,1,SpaceAT-1)
    SplitStr (C6P(),C6_RawString(1,1,SpaceAT)," ",8,0)
	  Turb_C6P = C6P(1)
	  CDOM_C6P = C6P(2)	
	  CHL_a_C6P = C6P(3)
    Brightners = C6P(4)
	  Fluorescein = C6P(5)
	  Ref_Fuel = C6P(6)
	  C6_Depth = C6P(7)
	  Temp_C6P = C6P(8)
	  If C6_TimeStr <> NAN Then
      CallTable(C6)
      C6_last_str = C6_TimeStr
    EndIf
	
    'Parse the FluoroProbe strings
    SplitStr(FP_555_SplitStr(),FP_Str555," ",22,5)
    SplitStr(FP_553_SplitStr(),FP_Str553," ",15,5)
	  FP_DateTime = FP_555_SplitStr(3)
	  FP_Pressure = FP_555_SplitStr(5)
	  FP_MedTemp = FP_555_SplitStr(20)
	  FP_Status = FP_555_SplitStr(22)
	  FP_Depth = FP_553_SplitStr(3)	
    FP_Trans = FP_553_SplitStr(5)	
    FP_GreenAlgae = FP_553_SplitStr(7)	
    FP_BlueGreen = FP_553_SplitStr(8)	
    FP_Diatoms = FP_553_SplitStr(9)	
    FP_Cryptophyta = FP_553_SplitStr(10)
    FP_AlgaeClass5 = FP_553_SplitStr(11)	
    FP_AlgaeClass6 = FP_553_SplitStr(12)	
    FP_AlgaeClass7 = FP_553_SplitStr(13)	
    FP_YellowSubs = FP_553_SplitStr(14)	
     
    If (StrComp(FP_553_SplitStr(6),"C14")=0) AND (StrComp(FP_555_SplitStr(2),"C1")=0) Then
       CallTable(FluoroProbe)
       SerialFlush (34)
    EndIf


    SplitStr(EchoMap_SplitString(),SDDBT,",",10,5)  
    dbt_header=EchoMap_SplitString(1)
    depth=EchoMap_SplitString(4)
    units_depth=EchoMap_SplitString(5)
    SplitStr(EchoMap_SplitString(),GPGGA,",",10,15)
    gps_fix_code=EchoMap_SplitString(7)  
    num_satellites=EchoMap_SplitString(8)
    If (gps_fix_code = 0) Then fix_quality = "Invalid"
    If (gps_fix_code = 1) Then fix_quality = "GPS"
    If (gps_fix_code = 2) Then fix_quality = "Differential" 
    SplitStr(EchoMap_SplitString(),SDMTW,",",5,15)
    water_temp = EchoMap_SplitString(2)   
    CallTable(EchoMap)
   
    PanelTemp(temp_logger,15000)
   
    scan_count = scan_count + 1
     
  'Check sensor status 
    'GPS -- both puck and depth sensors need to be running
    If ( (data_status="A") & (time_sync="Yes")) Then gps_status = 1 Else gps_status = 0 
    'EXO
    If ((pH>0) & (pH<14)) Then exo_status = 1 Else exo_status = 0 
    'Suna
    If ((no3_uM>0) & (temp_lamp<32)) Then suna_status = 1 Else suna_status = 0 
    'GGA
    If ((CO2_Dry>0) & (CO2_Dry<10000)) Then gga_status = 1 Else gga_status = 0
    
  NextScan
EndProg






